PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant': 'test', 'taskVer': '1'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1080, 1920]
  expName = tworatesteps
  exportHTML = on Save
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Routines
  Routine testTrial
    TextComponent testText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.05
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      text:
        Any text

        including line breaks
    CodeComponent code
      Code Type = JS
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      Begin JS Routine:
        console.log(trialsLoop.thisN);
        console.log(taskLoop.thisN);
  Routine setup
    TextComponent setupText
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Use Mouse. Space continue
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    KeyboardComponent setupResp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent JScodeFix
      Code Type = Auto->JS
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    CodeComponent selectionCode
      Code Type = JS
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      Begin JS Experiment:
        taskVer = Number.parseInt(expInfo["taskVer"]);
        if (Number.isNaN(taskVer)) {
            taskVer = 0
        }
        trialNum = 0;
        orderChoice = (taskVer % 6);
        rotationChoice = (Math.floor((taskVer / 12)) % 2);
        targetChoice = (Math.floor((taskVer / 6)) % 2);
        order = [0, 1, 2];
        if ((orderChoice === 0)) {
            order = [0, 1, 2];
        } else {
            if ((orderChoice === 1)) {
                order = [0, 1, 3];
            } else {
                if ((orderChoice === 2)) {
                    order = [0, 2, 1];
                } else {
                    if ((orderChoice === 3)) {
                        order = [0, 2, 3];
                    } else {
                        if ((orderChoice === 4)) {
                            order = [0, 3, 1];
                        } else {
                            if ((orderChoice === 5)) {
                                order = [0, 3, 2];
                            }
                        }
                    }
                }
            }
        }
        rotation = [1, (- 1)];
        if ((rotationChoice === 0)) {
            rotation = [1, (- 1)];
        } else {
            if ((rotationChoice === 1)) {
                rotation = [(- 1), 1];
            }
        }

        targetAngles = [[40, 50, 130, 140], [40, 50], [130, 140]];
        if ((targetChoice === 0)) {
            targetAngles = [[40, 50, 130, 140], [40, 50], [130, 140]];
        } else {
            if ((targetChoice === 1)) {
                targetAngles = [[40, 50, 130, 140], [130, 140], [40, 50]];
            }
        }

        // Vector containing number of trials
        trialnums = [24, 160, 160];
        targetangle_deg = [];

        var tasktargets, taskangles, nblocks;

        for (var taskno = 0; taskno < 3; taskno++) {
            var tasktargets, taskangles, nblocks;
            tasktargets = [];
            taskangles = targetAngles[taskno];
            nblocks = trialnums[taskno] / taskangles.length;
            for (var blockno = 0; blockno < nblocks; blockno++) {
                var blockangles = taskangles.slice(0);
                util.shuffle(blockangles);
                tasktargets.push.apply(tasktargets, blockangles);
            }
            targetangle_deg[taskno] = tasktargets;
        }

        rotations_deg = [];

        var taskrotations, tasktype, modifier, phasetrials, phaserotations, taskrotations;
        for (var taskno = 0; taskno < 3; taskno++) {
            var taskrotations, tasktype, trialno;
            taskrotations = [];
            tasktype = order[taskno];
            if (tasktype == 0) {
                for (var trialno = 0; trialno < 12; trialno++) {
                    taskrotations.push(0);
                }
                for (var trialno = 0; trialno < 12; trialno++) {
                    taskrotations.push(NaN);
                }
            }
        /* abrupt */
            if (tasktype == 1) {
                modifier = rotation[taskno-1];
                phasetrials = [32,96, 8, 24];
                phaserotations = [0, 30, -30, NaN];
                for (var phaseno = 0; phaseno < phasetrials.length; phaseno++) {
                    for (var trialno = 0; trialno < phasetrials[phaseno]; trialno++) {
                        taskrotations.push(phaserotations[phaseno] * modifier);
                    }
                }
            }
        /* ramped */
            if (tasktype == 2) {
                modifier = rotation[taskno-1];
                phasetrials = [32,48, 48, 8, 24];
                phaserotations = [0, NaN, 30, -30, NaN];
                for (var phaseno = 0; phaseno < phasetrials.length; phaseno++) {
                    if (phaseno == 1) {
                        for (var trialno = 0; trialno < phasetrials[phaseno]; trialno++) {
                            taskrotations.push((trialno + 1) * 0.625 * modifier);
                        }
                    } else {
                        for (trialno = 0; trialno < phasetrials[phaseno]; trialno++) {
                            taskrotations.push(phaserotations[phaseno] * modifier);
                        }
                    }
                }
            }
        /* stepped */
            if (tasktype == 3) {
                modifier = rotation[taskno-1];
                phasetrials = [32,24,24,24,24, 8, 24];
                phaserotations = [0, 7.5,15,22.5,30, -30, NaN];
                for (var phaseno = 0; phaseno < phasetrials.length; phaseno++) {
                    for (var trialno = 0; trialno < phasetrials[phaseno]; trialno++) {
                        taskrotations.push(phaserotations[phaseno] * modifier);
                    }
                }
            }
            rotations_deg[taskno] = taskrotations;
        }

        console.log(rotations_deg);
        console.log(targetangle_deg);
  Routine instruction
    TextComponent instructionText
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $taskVersion
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    KeyboardComponent instructionResp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent taskLoopVariable
      Code Type = JS
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      Begin JS Experiment:
        taskCounter = -1;
      Begin JS Routine:
        taskCounter++;
        trialCounter_task = 0;
        console.log(taskCounter);
        console.log(trialCounter_task);
  Routine end
    TextComponent endText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = thank you
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  Routine trial
    MouseComponent trialMouse
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = every frame
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = routine
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    CodeComponent cursorCode
      Code Type = JS
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      Begin JS Experiment:
        trialCounter = 0;
        //ang = NaN;
        //rtd = NaN;
        console.log("begin task");

        previousTaskTrials = 0;
        if (taskCounter > 0) {
            for (taskno = 0; taskno < taskCounter; taskno++) {

                previousTaskTrials += targetAngles[taskCounter].length;

            }
        }
        totalExperimentTrials = 24 + 160 + 160;
      Begin JS Routine:
        /* set up workspace on each trial */

        screen_width = window.innerWidth;
        screen_height = window.innerHeight;
        // scale so shortest side == 1
        short_side = Math.min(screen_width, screen_height);
        screen_width  = screen_width / short_side;
        screen_height = screen_height / short_side;

        trimmed_width = (2/3) * screen_width;
        trimmed_height = (2/3) * screen_height;

        if ((trimmed_height*2) < trimmed_width) {
                trimmed_width = trimmed_height*2;
        } else {
                trimmed_height = trimmed_width/2;
        }

        home_target_distance = trimmed_height;
        cursor_radius = trimmed_height * 0.025; // or whatever was used
        homepos = [0, -0.35 * trimmed_height];

        homex = homepos[0];
        homey = homepos[1];

        /* end set up workspace */

        win.mouseVisible = false;
        console.log("begin routine");

        cursorx_rel = [];
        cursory_rel = [];

        targetangle = targetAngles[taskCounter][trialCounter];
        targetangle_rad = (pi * (targetangle / 180));
        targetPos = [(cos(targetangle_rad) * home_target_distance), (sin(targetangle_rad) * home_target_distance)];


        //homePos = [0, 0];
        targetOpacity = 0;
        homeOpacity = 0;
        cursorOpacity = 1;

        trialCursor.pos = [1.5, 1.5];
        trialMouse.pos = [1.5, 1.5]; // why both?

        homeStart = false;
        reachOut = false;
        trialStep = 1;
        steps = [];

        /* marius messed up until here */
        // not sure if the rest is needed:

        cursorPosX = trialMouse.getPos()[0];
        cursorPosY = trialMouse.getPos()[1];

        //theta = 0;

        trials_left = totalExperimentTrials - previousTaskTrials - trialCounter;
        trialText.text = (trials_left).toString();

        targetangle = targetAngles[taskCounter][trialCounter_task];
        targetangle_rad = (pi * (targetangle / 180));

        showAngle.text = (targetangle).toString();
      Each JS Frame:
        /* if we run this on every frame of the trial routine, things *should* work out:
        calculate distances to determine step */

        CursorTargetDistance = Math.sqrt((Math.pow((trialCursor.pos[0] - trialTarget.pos[0]), 2) + Math.pow((trialCursor.pos[1] - trialTarget.pos[1]), 2)));
        CursorHomeDistance = Math.sqrt((Math.pow((trialCursor.pos[0] - trialHome.pos[0]), 2) + Math.pow((trialCursor.pos[1] - trialHome.pos[1]), 2)));
        steps.append(trialStep);

        //on Each Frame, we do this:
        cursorx_rel.append((trialCursor.pos[0] - homex) / home_target_distance);
        cursory_rel.append((trialCursor.pos[1] - homey) / home_target_distance);

        /* determine step and opacity of home and target */

        if ((! homeStart)) {
            homeOpacity = 1;
            targetOpacity = 0;
            step = 1;
            if ((CursorHomeDistance < cursor_radius)) {
                homeStart = true;
                //console.log(((("end step 1" + " (") + globalClock.getTime().toString()) + ")"));
            }
        }
        if (((! reachOut) && homeStart)) {
            homeOpacity = 0;
            targetOpacity = 1;
            step = 2;
            if ((CursorTargetDistance < cursor_radius)) {
                reachOut = true;
                //console.log(((("end step 2" + " (") + globalClock.getTime().toString()) + ")"));
            }
        }
        if (reachOut) {
            homeOpacity = 1;
            targetOpacity = 0;
            step = 3;
            if ((CursorHomeDistance < cursor_radius)) {
                //console.log(((("end step 3" + " (") + globalClock.getTime().toString()) + ")"));
                continueRoutine = false;
            }
        }

        /* determine the cursor size, position and opacity */

        mpx = trialMouse.getPos()[0];
        mpy = trialMouse.getPos()[1];

        // if the rotation is NaN, we need to give error-clamped feedback:

        if (isNaN(targetangle)) {

            if (step == 2) {
                theta = targetangle_rad;
                rx = (CursorHomeDistance * cos(targetangle_rad)) + homepos[0];
                ry = (CursorHomeDistance * sin(targetangle_rad)) + homepos[1];
                radius = cursor_radius;
                cursorOpacity = 1.0;
            } else { // STEP == 1 | STEP  == 3
                if (CursorHomeDistance > (0.20 * target_home_distance)) {
                    rx = homex;
                    ry = homey;
                    radius = CursorHomeDistance;
                    cursorOpacity = 0.2;
                } else {
                    rx = mpx;
                    ry = mpy;
                    radius = cursor_radius;
                    cursorOpacity = 1.0;
                 }
            }
        } else {
            rx = (mpx * cos(targetangle_rad)) - (mpy * sin(targetangle_rad));
            ry = (mpx * sin(targetangle_rad)) + (mpy * cos(targetangle_rad));
            radius = cursor_radius;
            cursorOpacity = 1.0;
        };
      End JS Experiment:
        console.log("end experiment");
      End JS Routine:
        thisExp.addData("step", steps);
        thisExp.addData("targetangle_deg", targetangle);
        thisExp.addData("rotation", rotations_deg);
        thisExp.addData("task", taskCounter);
        thisExp.addData("trialNum", trialCounter);

        console.log("end routine");

        trialCounter++;
    PolygonComponent trialTarget
      fillColor = $[1,1,1]
      nVertices = 180
      opacity [set every frame] = targetOpacity
      pos [set every frame] = targetPos
      saveStartStop = False
      shape = regular polygon...
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent trialHome
      fillColor = $[1,1,1]
      nVertices = 180
      opacity [set every frame] = homeOpacity
      pos [set every frame] = (0, 0)
      saveStartStop = False
      shape = regular polygon...
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent trialCursor
      fillColor = $[0,0,0]
      lineColor = $[-1.000,-1.000,-1.000]
      nVertices = 180
      opacity [set every frame] = cursorOpacity
      pos [set every frame] = [mpx, mpy]
      saveStartStop = False
      shape = regular polygon...
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
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    VariableComponent trialStep
      saveStartStop = False
      startExpValue = 0
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    TextComponent trialText
      letterHeight = 0.05
      pos = (-0.4, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Any text

        including line breaks
    KeyboardComponent testSkip
      allowedKeys = 'q','w','e','r','t','y','u','i','o','p','a','s','d','f','g','h','j','k','l','z','x','c','v','b','n','m'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent showAngle
      letterHeight = 0.1
      pos = (-0.6, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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Flow
  Routine setup
  LoopInitiator taskLoop loopType="TrialHandler"
    Selected rows = $order
    conditionsFile = taskConds.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('condsFile', 'famConds.xlsx'), ('taskVersion', 'Familiarization'), ('taskReps', 24)]),
      OrderedDict([('condsFile', 'mainConds.xlsx'), ('taskVersion', 'Abrupt'), ('taskReps', 160)]),
      OrderedDict([('condsFile', 'mainConds.xlsx'), ('taskVersion', 'Ramped'), ('taskReps', 160)]),
      OrderedDict([('condsFile', 'mainConds.xlsx'), ('taskVersion', 'Stepped'), ('taskReps', 160)])]
    Routine instruction
    LoopInitiator trialsLoop loopType="TrialHandler"
      conditionsFile = $condsFile
      loopType = sequential
      nReps = 1
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      Routine trial
    LoopTerminator trialsLoop
  LoopTerminator taskLoop
  Routine end
